PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word Priming Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'giggle'},
      {'study_word': 'heist'},
      {'study_word': 'wailing'},
      {'study_word': 'pursue'},
      {'study_word': 'concept'},
      {'study_word': 'keyboard'},
      {'study_word': 'quest'},
      {'study_word': 'click'},
      {'study_word': 'smuggle'},
      {'study_word': 'adieu'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_e_b_a_d'},
      {'test': 'n_m_e_'},
      {'test': 'm_n_y'},
      {'test': '_oo_'},
      {'test': 'c_n_e_p_'},
      {'test': 'c_s_i_n'},
      {'test': 'g_o_m'},
      {'test': '_u_s_e'},
      {'test': 'c_i_k'},
      {'test': 's_o_s'},
      {'test': '_o_p_t_r'},
      {'test': '_o_o_r'},
      {'test': '_i_g_l_'},
      {'test': '_o_s_'},
      {'test': '_o_m_l_'},
      {'test': '_a_e'},
      {'test': 'a_i_u'},
      {'test': 'c_m_r_'},
      {'test': '_r_m_s'},
      {'test': '_u_s_'},
      {'test': 's_a_c_'},
      {'test': 'u_d_t_'},
      {'test': 'w_i_i_g'},
      {'test': 'o_a_n_e'},
      {'test': '_ia_n_'},
      {'test': 't_g_r'},
      {'test': '_a_c_'},
      {'test': 'h_n_b_g'},
      {'test': '_ei_t'},
      {'test': 's_u_g_e'}]
    Routine test
  LoopTerminator trials_2
